PsychoPy2experiment version="2024.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['conditions/identity.xlsx', 'conditions/morph.xlsx', 'conditions/practice.xlsx', 'conditions/training_random.xlsx', 'conditions/training_sequential.xlsx', 'stimuli/training_sequential/TS_00.bmp', 'stimuli/training_sequential/TS_01.bmp', 'stimuli/training_sequential/TS_02.bmp', 'stimuli/training_sequential/TS_03.bmp', 'stimuli/training_sequential/TS_04.bmp', 'stimuli/training_sequential/TS_05.bmp', 'stimuli/training_sequential/TS_06.bmp', 'stimuli/practice/PT_00.jpg', 'stimuli/practice/PT_01.jpg', 'stimuli/practice/PT_02.jpg', 'stimuli/practice/PT_03.jpg', 'stimuli/practice/PT_04.jpg', 'stimuli/practice/PT_05.jpg', 'stimuli/practice/PT_06.jpg', 'stimuli/practice/PT_07.jpg', 'stimuli/practice/PT_08.jpg', 'stimuli/practice/PT_09.jpg', 'stimuli/practice/PT_10.jpg', 'stimuli/practice/PT_11.jpg', 'stimuli/practice/PT_12.jpg', 'stimuli/practice/PT_13.jpg', 'stimuli/practice/PT_14.jpg', 'stimuli/training_random/TS_AF02_SC.bmp', 'stimuli/training_random/TS_AM02_HC.bmp', 'stimuli/training_random/TS_BF09_FC.bmp', 'stimuli/training_random/TS_BF18_AC.bmp', 'stimuli/training_random/TS_BM08_SUR.bmp', 'stimuli/training_random/TS_BM12_HC.bmp', 'stimuli/training_random/TS_HF03_DC.bmp', 'stimuli/training_random/TS_HM04_SC.bmp', 'stimuli/training_random/TS_HM05_AC.bmp', 'stimuli/training_random/TS_WF02_SUR.bmp', 'stimuli/training_random/TS_WF09_FC.bmp', 'stimuli/training_random/TS_WM01_DC.bmp', 'stimuli/WM06/WMD_00.jpg', 'stimuli/WM06/WMD_01.jpg', 'stimuli/WM06/WMD_02.jpg', 'stimuli/WM06/WMD_03.jpg', 'stimuli/WM06/WMD_04.jpg', 'stimuli/WM06/WMD_05.jpg', 'stimuli/WM06/WMD_06.jpg', 'stimuli/WM06/WMD_07.jpg', 'stimuli/WM06/WMD_08.jpg', 'stimuli/WM06/WMD_09.jpg', 'stimuli/WM06/WMD_10.jpg', 'stimuli/WM06/WMD_11.jpg', 'stimuli/WM06/WMD_12.jpg', 'stimuli/WM06/WMD_13.jpg', 'stimuli/WM06/WMD_14.jpg', 'stimuli/WM04/WMSu_00.jpg', 'stimuli/WM04/WMSu_01.jpg', 'stimuli/WM04/WMSu_02.jpg', 'stimuli/WM04/WMSu_03.jpg', 'stimuli/WM04/WMSu_04.jpg', 'stimuli/WM04/WMSu_05.jpg', 'stimuli/WM04/WMSu_06.jpg', 'stimuli/WM04/WMSu_07.jpg', 'stimuli/WM04/WMSu_08.jpg', 'stimuli/WM04/WMSu_09.jpg', 'stimuli/WM04/WMSu_10.jpg', 'stimuli/WM04/WMSu_11.jpg', 'stimuli/WM04/WMSu_12.jpg', 'stimuli/WM04/WMSu_13.jpg', 'stimuli/WM04/WMSu_14.jpg', 'stimuli/WM02/WMS_00.jpg', 'stimuli/WM02/WMS_01.jpg', 'stimuli/WM02/WMS_02.jpg', 'stimuli/WM02/WMS_03.jpg', 'stimuli/WM02/WMS_04.jpg', 'stimuli/WM02/WMS_05.jpg', 'stimuli/WM02/WMS_06.jpg', 'stimuli/WM02/WMS_07.jpg', 'stimuli/WM02/WMS_08.jpg', 'stimuli/WM02/WMS_09.jpg', 'stimuli/WM02/WMS_10.jpg', 'stimuli/WM02/WMS_11.jpg', 'stimuli/WM02/WMS_12.jpg', 'stimuli/WM02/WMS_13.jpg', 'stimuli/WM02/WMS_14.jpg', 'stimuli/WF13/WFA_00.jpg', 'stimuli/WF13/WFA_01.jpg', 'stimuli/WF13/WFA_02.jpg', 'stimuli/WF13/WFA_03.jpg', 'stimuli/WF13/WFA_04.jpg', 'stimuli/WF13/WFA_05.jpg', 'stimuli/WF13/WFA_06.jpg', 'stimuli/WF13/WFA_07.jpg', 'stimuli/WF13/WFA_08.jpg', 'stimuli/WF13/WFA_09.jpg', 'stimuli/WF13/WFA_10.jpg', 'stimuli/WF13/WFA_11.jpg', 'stimuli/WF13/WFA_12.jpg', 'stimuli/WF13/WFA_13.jpg', 'stimuli/WF13/WFA_14.jpg', 'stimuli/WF05/WFH_00.jpg', 'stimuli/WF05/WFH_01.jpg', 'stimuli/WF05/WFH_02.jpg', 'stimuli/WF05/WFH_03.jpg', 'stimuli/WF05/WFH_04.jpg', 'stimuli/WF05/WFH_05.jpg', 'stimuli/WF05/WFH_06.jpg', 'stimuli/WF05/WFH_07.jpg', 'stimuli/WF05/WFH_08.jpg', 'stimuli/WF05/WFH_09.jpg', 'stimuli/WF05/WFH_10.jpg', 'stimuli/WF05/WFH_11.jpg', 'stimuli/WF05/WFH_12.jpg', 'stimuli/WF05/WFH_13.jpg', 'stimuli/WF05/WFH_14.jpg', 'stimuli/WF04/WFF_00.jpg', 'stimuli/WF04/WFF_01.jpg', 'stimuli/WF04/WFF_02.jpg', 'stimuli/WF04/WFF_03.jpg', 'stimuli/WF04/WFF_04.jpg', 'stimuli/WF04/WFF_05.jpg', 'stimuli/WF04/WFF_06.jpg', 'stimuli/WF04/WFF_07.jpg', 'stimuli/WF04/WFF_08.jpg', 'stimuli/WF04/WFF_09.jpg', 'stimuli/WF04/WFF_10.jpg', 'stimuli/WF04/WFF_11.jpg', 'stimuli/WF04/WFF_12.jpg', 'stimuli/WF04/WFF_13.jpg', 'stimuli/WF04/WFF_14.jpg', 'stimuli/HM09/HMA_00.jpg', 'stimuli/HM09/HMA_01.jpg', 'stimuli/HM09/HMA_02.jpg', 'stimuli/HM09/HMA_03.jpg', 'stimuli/HM09/HMA_04.jpg', 'stimuli/HM09/HMA_05.jpg', 'stimuli/HM09/HMA_06.jpg', 'stimuli/HM09/HMA_07.jpg', 'stimuli/HM09/HMA_08.jpg', 'stimuli/HM09/HMA_09.jpg', 'stimuli/HM09/HMA_10.jpg', 'stimuli/HM09/HMA_11.jpg', 'stimuli/HM09/HMA_12.jpg', 'stimuli/HM09/HMA_13.jpg', 'stimuli/HM09/HMA_14.jpg', 'stimuli/HM07/HMS_00.jpg', 'stimuli/HM07/HMS_01.jpg', 'stimuli/HM07/HMS_02.jpg', 'stimuli/HM07/HMS_03.jpg', 'stimuli/HM07/HMS_04.jpg', 'stimuli/HM07/HMS_05.jpg', 'stimuli/HM07/HMS_06.jpg', 'stimuli/HM07/HMS_07.jpg', 'stimuli/HM07/HMS_08.jpg', 'stimuli/HM07/HMS_09.jpg', 'stimuli/HM07/HMS_10.jpg', 'stimuli/HM07/HMS_11.jpg', 'stimuli/HM07/HMS_12.jpg', 'stimuli/HM07/HMS_13.jpg', 'stimuli/HM07/HMS_14.jpg', 'stimuli/HM03/HMF_00.jpg', 'stimuli/HM03/HMF_01.jpg', 'stimuli/HM03/HMF_02.jpg', 'stimuli/HM03/HMF_03.jpg', 'stimuli/HM03/HMF_04.jpg', 'stimuli/HM03/HMF_05.jpg', 'stimuli/HM03/HMF_06.jpg', 'stimuli/HM03/HMF_07.jpg', 'stimuli/HM03/HMF_08.jpg', 'stimuli/HM03/HMF_09.jpg', 'stimuli/HM03/HMF_10.jpg', 'stimuli/HM03/HMF_11.jpg', 'stimuli/HM03/HMF_12.jpg', 'stimuli/HM03/HMF_13.jpg', 'stimuli/HM03/HMF_14.jpg', 'stimuli/HF09/HFSu_00.jpg', 'stimuli/HF09/HFSu_01.jpg', 'stimuli/HF09/HFSu_02.jpg', 'stimuli/HF09/HFSu_03.jpg', 'stimuli/HF09/HFSu_04.jpg', 'stimuli/HF09/HFSu_05.jpg', 'stimuli/HF09/HFSu_06.jpg', 'stimuli/HF09/HFSu_07.jpg', 'stimuli/HF09/HFSu_08.jpg', 'stimuli/HF09/HFSu_09.jpg', 'stimuli/HF09/HFSu_10.jpg', 'stimuli/HF09/HFSu_11.jpg', 'stimuli/HF09/HFSu_12.jpg', 'stimuli/HF09/HFSu_13.jpg', 'stimuli/HF09/HFSu_14.jpg', 'stimuli/HF05/HFD_00.jpg', 'stimuli/HF05/HFD_01.jpg', 'stimuli/HF05/HFD_02.jpg', 'stimuli/HF05/HFD_03.jpg', 'stimuli/HF05/HFD_04.jpg', 'stimuli/HF05/HFD_05.jpg', 'stimuli/HF05/HFD_06.jpg', 'stimuli/HF05/HFD_07.jpg', 'stimuli/HF05/HFD_08.jpg', 'stimuli/HF05/HFD_09.jpg', 'stimuli/HF05/HFD_10.jpg', 'stimuli/HF05/HFD_11.jpg', 'stimuli/HF05/HFD_12.jpg', 'stimuli/HF05/HFD_13.jpg', 'stimuli/HF05/HFD_14.jpg', 'stimuli/HF01/HFH_00.jpg', 'stimuli/HF01/HFH_01.jpg', 'stimuli/HF01/HFH_02.jpg', 'stimuli/HF01/HFH_03.jpg', 'stimuli/HF01/HFH_04.jpg', 'stimuli/HF01/HFH_05.jpg', 'stimuli/HF01/HFH_06.jpg', 'stimuli/HF01/HFH_07.jpg', 'stimuli/HF01/HFH_08.jpg', 'stimuli/HF01/HFH_09.jpg', 'stimuli/HF01/HFH_10.jpg', 'stimuli/HF01/HFH_11.jpg', 'stimuli/HF01/HFH_12.jpg', 'stimuli/HF01/HFH_13.jpg', 'stimuli/HF01/HFH_14.jpg', 'stimuli/BM18/BMH_00.jpg', 'stimuli/BM18/BMH_01.jpg', 'stimuli/BM18/BMH_02.jpg', 'stimuli/BM18/BMH_03.jpg', 'stimuli/BM18/BMH_04.jpg', 'stimuli/BM18/BMH_05.jpg', 'stimuli/BM18/BMH_06.jpg', 'stimuli/BM18/BMH_07.jpg', 'stimuli/BM18/BMH_08.jpg', 'stimuli/BM18/BMH_09.jpg', 'stimuli/BM18/BMH_10.jpg', 'stimuli/BM18/BMH_11.jpg', 'stimuli/BM18/BMH_12.jpg', 'stimuli/BM18/BMH_13.jpg', 'stimuli/BM18/BMH_14.jpg', 'stimuli/BM09/BMSu_00.jpg', 'stimuli/BM09/BMSu_01.jpg', 'stimuli/BM09/BMSu_02.jpg', 'stimuli/BM09/BMSu_03.jpg', 'stimuli/BM09/BMSu_04.jpg', 'stimuli/BM09/BMSu_05.jpg', 'stimuli/BM09/BMSu_06.jpg', 'stimuli/BM09/BMSu_07.jpg', 'stimuli/BM09/BMSu_08.jpg', 'stimuli/BM09/BMSu_09.jpg', 'stimuli/BM09/BMSu_10.jpg', 'stimuli/BM09/BMSu_11.jpg', 'stimuli/BM09/BMSu_12.jpg', 'stimuli/BM09/BMSu_13.jpg', 'stimuli/BM09/BMSu_14.jpg', 'stimuli/BM02/BMF_00.jpg', 'stimuli/BM02/BMF_01.jpg', 'stimuli/BM02/BMF_02.jpg', 'stimuli/BM02/BMF_03.jpg', 'stimuli/BM02/BMF_04.jpg', 'stimuli/BM02/BMF_05.jpg', 'stimuli/BM02/BMF_06.jpg', 'stimuli/BM02/BMF_07.jpg', 'stimuli/BM02/BMF_08.jpg', 'stimuli/BM02/BMF_09.jpg', 'stimuli/BM02/BMF_10.jpg', 'stimuli/BM02/BMF_11.jpg', 'stimuli/BM02/BMF_12.jpg', 'stimuli/BM02/BMF_13.jpg', 'stimuli/BM02/BMF_14.jpg', 'stimuli/BF08/BFD_00.jpg', 'stimuli/BF08/BFD_01.jpg', 'stimuli/BF08/BFD_02.jpg', 'stimuli/BF08/BFD_03.jpg', 'stimuli/BF08/BFD_04.jpg', 'stimuli/BF08/BFD_05.jpg', 'stimuli/BF08/BFD_06.jpg', 'stimuli/BF08/BFD_07.jpg', 'stimuli/BF08/BFD_08.jpg', 'stimuli/BF08/BFD_09.jpg', 'stimuli/BF08/BFD_10.jpg', 'stimuli/BF08/BFD_11.jpg', 'stimuli/BF08/BFD_12.jpg', 'stimuli/BF08/BFD_13.jpg', 'stimuli/BF08/BFD_14.jpg', 'stimuli/BF05/BFA_00.jpg', 'stimuli/BF05/BFA_01.jpg', 'stimuli/BF05/BFA_02.jpg', 'stimuli/BF05/BFA_03.jpg', 'stimuli/BF05/BFA_04.jpg', 'stimuli/BF05/BFA_05.jpg', 'stimuli/BF05/BFA_06.jpg', 'stimuli/BF05/BFA_07.jpg', 'stimuli/BF05/BFA_08.jpg', 'stimuli/BF05/BFA_09.jpg', 'stimuli/BF05/BFA_10.jpg', 'stimuli/BF05/BFA_11.jpg', 'stimuli/BF05/BFA_12.jpg', 'stimuli/BF05/BFA_13.jpg', 'stimuli/BF05/BFA_14.jpg', 'stimuli/BF02/BFS_00.jpg', 'stimuli/BF02/BFS_01.jpg', 'stimuli/BF02/BFS_02.jpg', 'stimuli/BF02/BFS_03.jpg', 'stimuli/BF02/BFS_04.jpg', 'stimuli/BF02/BFS_05.jpg', 'stimuli/BF02/BFS_06.jpg', 'stimuli/BF02/BFS_07.jpg', 'stimuli/BF02/BFS_08.jpg', 'stimuli/BF02/BFS_09.jpg', 'stimuli/BF02/BFS_10.jpg', 'stimuli/BF02/BFS_11.jpg', 'stimuli/BF02/BFS_12.jpg', 'stimuli/BF02/BFS_13.jpg', 'stimuli/BF02/BFS_14.jpg', 'stimuli/AM06/AMH_00.jpg', 'stimuli/AM06/AMH_01.jpg', 'stimuli/AM06/AMH_02.jpg', 'stimuli/AM06/AMH_03.jpg', 'stimuli/AM06/AMH_04.jpg', 'stimuli/AM06/AMH_05.jpg', 'stimuli/AM06/AMH_06.jpg', 'stimuli/AM06/AMH_07.jpg', 'stimuli/AM06/AMH_08.jpg', 'stimuli/AM06/AMH_09.jpg', 'stimuli/AM06/AMH_10.jpg', 'stimuli/AM06/AMH_11.jpg', 'stimuli/AM06/AMH_12.jpg', 'stimuli/AM06/AMH_13.jpg', 'stimuli/AM06/AMH_14.jpg', 'stimuli/AM05/AMD_00.jpg', 'stimuli/AM05/AMD_01.jpg', 'stimuli/AM05/AMD_02.jpg', 'stimuli/AM05/AMD_03.jpg', 'stimuli/AM05/AMD_04.jpg', 'stimuli/AM05/AMD_05.jpg', 'stimuli/AM05/AMD_06.jpg', 'stimuli/AM05/AMD_07.jpg', 'stimuli/AM05/AMD_08.jpg', 'stimuli/AM05/AMD_09.jpg', 'stimuli/AM05/AMD_10.jpg', 'stimuli/AM05/AMD_11.jpg', 'stimuli/AM05/AMD_12.jpg', 'stimuli/AM05/AMD_13.jpg', 'stimuli/AM05/AMD_14.jpg', 'stimuli/AM03/AMA_00.jpg', 'stimuli/AM03/AMA_01.jpg', 'stimuli/AM03/AMA_02.jpg', 'stimuli/AM03/AMA_03.jpg', 'stimuli/AM03/AMA_04.jpg', 'stimuli/AM03/AMA_05.jpg', 'stimuli/AM03/AMA_06.jpg', 'stimuli/AM03/AMA_07.jpg', 'stimuli/AM03/AMA_08.jpg', 'stimuli/AM03/AMA_09.jpg', 'stimuli/AM03/AMA_10.jpg', 'stimuli/AM03/AMA_11.jpg', 'stimuli/AM03/AMA_12.jpg', 'stimuli/AM03/AMA_13.jpg', 'stimuli/AM03/AMA_14.jpg', 'stimuli/AF12/AFS_00.jpg', 'stimuli/AF12/AFS_01.jpg', 'stimuli/AF12/AFS_02.jpg', 'stimuli/AF12/AFS_03.jpg', 'stimuli/AF12/AFS_04.jpg', 'stimuli/AF12/AFS_05.jpg', 'stimuli/AF12/AFS_06.jpg', 'stimuli/AF12/AFS_07.jpg', 'stimuli/AF12/AFS_08.jpg', 'stimuli/AF12/AFS_09.jpg', 'stimuli/AF12/AFS_10.jpg', 'stimuli/AF12/AFS_11.jpg', 'stimuli/AF12/AFS_12.jpg', 'stimuli/AF12/AFS_13.jpg', 'stimuli/AF12/AFS_14.jpg', 'stimuli/AF11/AFF_00.jpg', 'stimuli/AF11/AFF_01.jpg', 'stimuli/AF11/AFF_02.jpg', 'stimuli/AF11/AFF_03.jpg', 'stimuli/AF11/AFF_04.jpg', 'stimuli/AF11/AFF_05.jpg', 'stimuli/AF11/AFF_06.jpg', 'stimuli/AF11/AFF_07.jpg', 'stimuli/AF11/AFF_08.jpg', 'stimuli/AF11/AFF_09.jpg', 'stimuli/AF11/AFF_10.jpg', 'stimuli/AF11/AFF_11.jpg', 'stimuli/AF11/AFF_12.jpg', 'stimuli/AF11/AFF_13.jpg', 'stimuli/AF11/AFF_14.jpg', 'stimuli/AF10/AFSu_00.jpg', 'stimuli/AF10/AFSu_01.jpg', 'stimuli/AF10/AFSu_02.jpg', 'stimuli/AF10/AFSu_03.jpg', 'stimuli/AF10/AFSu_04.jpg', 'stimuli/AF10/AFSu_05.jpg', 'stimuli/AF10/AFSu_06.jpg', 'stimuli/AF10/AFSu_07.jpg', 'stimuli/AF10/AFSu_08.jpg', 'stimuli/AF10/AFSu_09.jpg', 'stimuli/AF10/AFSu_10.jpg', 'stimuli/AF10/AFSu_11.jpg', 'stimuli/AF10/AFSu_12.jpg', 'stimuli/AF10/AFSu_13.jpg', 'stimuli/AF10/AFSu_14.jpg']
  Screen = 1
  Units = height
  Window size (pixels) = [960, 540]
  expName = emotion_detection_task_v3
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine rating
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    CodeComponent rating_code
      Code Type = Auto->JS
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      Begin Routine:
        # Concatenate variables to select correct image from correct folder
        imageStim = folder + race + gender + emotion + append + ".jpg"

        # Message that displays for invalid keypresses, blank to begin with
        keypressMsg = ""

        event.clearEvents()
      Each Frame:
        invalid = event.getKeys(keyList = ['a', 'b', 'c', 'e', 'g', 'h', 'i', 'l', 'm', 'o', 'p', 'q', 'r', 's', 't', 'u', 'w', 'x', 'y', 'z'])

        if len(invalid) != 0:
            keypressMsg = "invalid keypress, please only use the keys indicated"
      End Routine:
        response = rating_valid_keys.keys
        rt = rating_valid_keys.rt
    TextComponent rating_text
      letterHeight = cue_size
      pos = keypressMsgPos
      startVal [time (s)] = 0.0
      text [set every frame] = $keypressMsg
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    ImageComponent rating_image
      image [set every repeat] = $imageStim
      pos = imagePos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent rating_key_mapping
      image = key_mapping.png
      pos = keypressPos
      size = (0.5148, 0.264)
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_valid_keys
      allowedKeys = 'd', 'f', 'v', 'space', 'n', 'j', 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent rating_invalid_keys
      allowedKeys = 'a', 'b', 'c', 'e', 'g', 'h', 'i', 'l', 'm', 'o', 'p', 'q', 'r', 's', 't', 'u', 'w', 'x', 'y', 'z'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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  Routine fixation
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    TextComponent fixation_text
      durationEstim = 1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fixationDur
      text = +
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  Routine setup
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    CodeComponent setup_code
      Code Type = Auto->JS
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      Begin Experiment:
        # Variables, durations/sizes etc.
        # Any variables used across multiple routines are specified here
        # Variables only used within one routine are specified in their own code component
        fixationDur = 1

        instruction_size = 0.03

        cue_size = 0.05

        # Position for stimuli
        imagePos = [0, 0.05]
        # Position for keypress mapping image
        keypressPos = [0, -0.35]
        # Position for invalid keypress text
        keypressMsgPos = [0, 0.4]
  Routine instructions
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    TextComponent instructions_text
      letterHeight = instruction_size
      startVal [time (s)] = 0.0
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      text:
        Main Task

        You will be shown an image of a neutral face which, over the span of 15 images, will gradually morph/change into one of the following emotions: disgust, fear, sad, angry, happy, or surprise. For every image in the morph indicate what emotion you see. We are interested in how fast and accurately you can identify the emotion.

        The first face of each morph will appear neutral. Begin by pressing the SPACE BAR to indicate this. Do this for all of the following faces that appear neutral. Once you see an emotion in the face, press the key corresponding to the emotion that you see. If you see an emotion but are unsure what it is, please only guess the emotion you see when you are reasonably confident. For each image try to respond as quickly as possible.

        There will be a practice trial, then 24 experimental trials.

        Press SPACE BAR to begin the practice trial.
    KeyboardComponent instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent end_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Thank you for your participation.

        REMEMBER THIS CODE: 955
        You will need to enter this code in Survey Monkey.


        Please return to Survey Monkey to finish the experiment.

        Press ENTER to end this task.
    KeyboardComponent end_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine isi
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    TextComponent isi_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine first_morph_step
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    CodeComponent first_morph_step_code
      Code Type = Auto->JS
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      Begin Routine:
        # Concatenate variables to select correct image from correct folder
        imageStim = folder + race + gender + emotion + append + ".jpg"

        # Message that displays for invalid keypresses, blank to begin with
        keypressMsg = ""

        event.clearEvents()
      Each Frame:
        invalid = event.getKeys(keyList = ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'])

        if len(invalid) != 0:
            keypressMsg = "invalid keypress, please only use the keys indicated"
      End Routine:
        response = first_morph_step_valid_keys.keys
        rt = first_morph_step_valid_keys.rt
    TextComponent first_morph_step_text
      letterHeight = cue_size
      pos = keypressMsgPos
      startVal [time (s)] = 0.0
      text [set every frame] = $keypressMsg
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    ImageComponent first_morph_step_image
      image [set every repeat] = $imageStim
      pos = imagePos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent first_morph_step_key_mapping
      image = key_mapping_first.png
      pos = keypressPos
      size = (0.5148, 0.264)
      startVal [time (s)] = 0.0
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    KeyboardComponent first_morph_step_valid_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent first_morph_step_invalid_keys
      allowedKeys = 'a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine is_first_step
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    CodeComponent is_first_step_code
      Code Type = Auto->JS
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      Begin Routine:
        if first_step == 1:
            firstStepRep = 1
        else:
            firstStepRep = 0
  Routine isnt_first_step
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    CodeComponent isnt_first_step_loop
      Code Type = Auto->JS
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      Begin Routine:
        if first_step == 1:
            remainingStepsRep = 0
        else:
            remainingStepsRep = 1
  Routine add_data
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    CodeComponent add_data_code
      Code Type = Auto->JS
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      Begin Routine:
        thisExp.addData("image", imageStim)
        thisExp.addData("response", response)
        thisExp.addData("rt", rt)
  Routine intro
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    CodeComponent intro_code
      Code Type = Auto->JS
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      Begin Experiment:
        introText = "Participant ID:" + str(expInfo['participant']) + "\n\n Please answer the following questions:\n\n Press ENTER to continue once you have responded to each question. \n\n"
        questionOne = "On what DAY were you born (e.g., July 16, 1985 - 16 is the DAY):"
        questionTwo = "What are the FIRST THREE letters of you mother’s FIRST name?"
        questionThree = "What is the FIRST letter of your middle name? (if you do not have a middle name please put the letter ‘X’)"

        intro_leftPos = -0.3
        intro_rightPos = 0.3
        intro_topPos = 0.25
        intro_midPos = 0
        intro_bottomPos = -0.25
        intro_wrapWidth = 0.4
      Each Frame:
        if intro_box_1.text != "":
            if intro_box_2.text != "":
                if intro_box_3.text != "":
                    responded = True
        else:
            responded = False
      End Routine:
        win.mouseVisible = False
    TextComponent intro_text
      letterHeight = instruction_size
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = $introText
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    TextComponent intro_q1
      letterHeight = instruction_size
      pos = (intro_leftPos, intro_topPos)
      startVal [time (s)] = 0.0
      text = $questionOne
      wrapWidth = intro_wrapWidth
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    TextComponent intro_q2
      letterHeight = instruction_size
      pos = (intro_leftPos, intro_midPos)
      startVal [time (s)] = 0.0
      text = $questionTwo
      wrapWidth = intro_wrapWidth
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    TextComponent intro_q3
      letterHeight = instruction_size
      pos = (intro_leftPos, intro_bottomPos)
      startVal [time (s)] = 0.0
      text = $questionThree
      wrapWidth = intro_wrapWidth
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    TextboxComponent intro_box_1
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      padding = 0.02
      pos = (intro_rightPos, intro_topPos)
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextboxComponent intro_box_2
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      padding = 0.02
      pos = (intro_rightPos, intro_midPos)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    TextboxComponent intro_box_3
      bold = False
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      padding = 0.02
      pos = (intro_rightPos, intro_bottomPos)
      size = (0.5, 0.1)
      startVal [time (s)] = 0.0
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    KeyboardComponent intro_key
      allowedKeys = 'return'
      forceEndRoutine = True
      startEstim = 0
      startVal [condition] = responded
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    MouseComponent intro_mouse
      forceEndRoutineOnPress = never
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine training_instructions
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    TextComponent training_instructions_text
      letterHeight = instruction_size
      startVal [time (s)] = 0.0
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      text:
        You will be completing a facial emotion detection task. You will be asked to use your keyboard to indicate what emotion you see.

        There will be a training session before the main task. You will be asked to identify the emotions within 7 faces, and will be told when your response is wrong. Then you will be asked to identify the emotions of 12 more faces, without any feedback. For each face, try to respond as quickly as possible.

        Press the SPACE BAR to progress to the training session.
    KeyboardComponent training_instructions_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine training_message
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    TextComponent training_message_text
      letterHeight = instruction_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Training Session
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  Routine training_trial
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    CodeComponent training_trial_code
      Code Type = Auto->JS
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      Begin Experiment:
        trainingMsg = False
      Begin Routine:
        event.clearEvents()
      Each Frame:
        trainingKeys = event.getKeys(keyList = ['d','f','v','space','n','j','k'])
        if len(trainingKeys) != 0:
            if trainingKeys[0] == trainingAns:
                continueRoutine = False
            else:
                trainingMsg = True
                event.clearEvents()
      End Routine:
        trainingMsg = False
    TextComponent training_trial_text
      letterHeight = cue_size
      pos = keypressMsgPos
      startVal [time (s)] = 0.0
      text = For each image indicate what emotion you see using the keyboard mapping shown below.
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    TextComponent training_trial_incorrect_message
      letterHeight = cue_size
      pos = (0.45, 0)
      startVal [condition] = trainingMsg
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      text:
        incorrect!
        try again.
    ImageComponent training_trial_image
      image [set every repeat] = $trainingStim
      pos = imagePos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent training_trial_key_mapping
      image = key_mapping.png
      pos = keypressPos
      size = (0.5148, 0.264)
      startVal [time (s)] = 0.0
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    KeyboardComponent training_trial_key
      allowedKeys = 'd', 'f', 'v', 'space', 'n', 'j', 'k'
      correctAns = trainingAns
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine training_trial_2
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    CodeComponent training_trial_2_code
      Code Type = Auto->JS
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      Begin Routine:
        # Message that displays for invalid keypresses, blank to begin with
        keypressMsg = ""

        event.clearEvents()
      Each Frame:
        invalid = event.getKeys(keyList = ['a', 'b', 'c', 'e', 'g', 'h', 'i', 'l', 'm', 'o', 'p', 'q', 'r', 's', 't', 'u', 'w', 'x', 'y', 'z'])

        if len(invalid) != 0:
            keypressMsg = "invalid keypress, please only use the keys indicated"
    TextComponent training_trial_2_text
      letterHeight = 0.05
      pos = keypressMsgPos
      startVal [time (s)] = 0.0
      text [set every frame] = $keypressMsg
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    ImageComponent training_trial_2_image
      image [set every repeat] = $training2Stim
      pos = imagePos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent training_trial_2_key_mapping
      image = key_mapping.png
      pos = keypressPos
      size = (0.5148, 0.264)
      startVal [time (s)] = 0.0
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    KeyboardComponent training_trial_2_key
      allowedKeys = 'd', 'f', 'v', 'space', 'n', 'j', 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practice_trial
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    CodeComponent practice_trial_code
      Code Type = Auto->JS
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      Begin Routine:
        # Message that displays for invalid keypresses, blank to begin with
        keypressMsg = ""

        event.clearEvents()
      Each Frame:
        invalid = event.getKeys(keyList = ['a', 'b', 'c', 'e', 'g', 'h', 'i', 'l', 'm', 'o', 'p', 'q', 'r', 's', 't', 'u', 'w', 'x', 'y', 'z'])

        if len(invalid) != 0:
            keypressMsg = "invalid keypress, please only use the keys indicated"
    TextComponent practice_trial_text
      letterHeight = 0.05
      pos = keypressMsgPos
      startVal [time (s)] = 0.0
      text [set every frame] = $keypressMsg
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    ImageComponent practice_trial_key_mapping
      image = key_mapping.png
      pos = keypressPos
      size = (0.5148, 0.264)
      startVal [time (s)] = 0.0
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    ImageComponent practice_trial_image
      image [set every repeat] = $practiceStim
      pos = imagePos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_trial_valid_keys
      allowedKeys = 'd', 'f', 'v', 'space', 'n', 'j', 'k'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_trial_invalid_keys
      allowedKeys = 'a', 'b', 'c', 'e', 'g', 'h', 'i', 'l', 'm', 'o', 'p', 'q', 'r', 's', 't', 'u', 'w', 'x', 'y', 'z'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine practice_message
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    TextComponent practice_message_text
      letterHeight = instruction_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Practice Block
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  Routine main_message
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    TextComponent main_message_text
      letterHeight = instruction_size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Main Experimental Block
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  Routine practice_first_step
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    CodeComponent practice_first_step_code
      Code Type = Auto->JS
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      Begin Routine:
        # Message that displays for invalid keypresses, blank to begin with
        keypressMsg = ""

        event.clearEvents()
      Each Frame:
        invalid = event.getKeys(keyList = ['a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'])

        if len(invalid) != 0:
            keypressMsg = "invalid keypress, please only use the keys indicated"
    TextComponent practice_first_step_text
      letterHeight = 0.05
      pos = keypressMsgPos
      startVal [time (s)] = 0.0
      text [set every frame] = $keypressMsg
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    ImageComponent practice_first_step_image
      image = stimuli/practice/PT_00.jpg
      pos = imagePos
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent practice_first_step_key_mapping
      image = key_mapping_first.png
      pos = keypressPos
      size = (0.5148, 0.264)
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_first_step_valid_keys
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    KeyboardComponent practice_first_step_invalid_keys
      allowedKeys = 'a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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Flow
  Routine setup
  Routine intro
  Routine training_instructions
  Routine training_message
  LoopInitiator training_loop loopType="TrialHandler"
    conditionsFile = conditions/training_sequential.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'trainingStim': 'stimuli/training_sequential/TS_00.bmp', 'trainingAns': "d'"},
      {'trainingStim': 'stimuli/training_sequential/TS_01.bmp', 'trainingAns': "f'"},
      {'trainingStim': 'stimuli/training_sequential/TS_02.bmp', 'trainingAns': "v'"},
      {'trainingStim': 'stimuli/training_sequential/TS_03.bmp', 'trainingAns': "space'"},
      {'trainingStim': 'stimuli/training_sequential/TS_04.bmp', 'trainingAns': "n'"},
      {'trainingStim': 'stimuli/training_sequential/TS_05.bmp', 'trainingAns': "j'"},
      {'trainingStim': 'stimuli/training_sequential/TS_06.bmp', 'trainingAns': "k'"}]
    Routine isi
    Routine training_trial
  LoopTerminator training_loop
  LoopInitiator training_loop_2 loopType="TrialHandler"
    conditionsFile = conditions/training_random.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'training2Stim': 'stimuli/training_random/TS_AF02_SC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_AM02_HC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_BF09_FC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_BF18_AC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_BM08_SUR.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_BM12_HC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_HF03_DC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_HM04_SC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_HM05_AC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_WF02_SUR.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_WF09_FC.bmp'},
      {'training2Stim': 'stimuli/training_random/TS_WM01_DC.bmp'}]
    Routine isi
    Routine training_trial_2
  LoopTerminator training_loop_2
  Routine instructions
  Routine practice_message
  Routine practice_first_step
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = conditions/practice.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'practiceStim': 'stimuli/practice/PT_01.jpg'},
      {'practiceStim': 'stimuli/practice/PT_02.jpg'},
      {'practiceStim': 'stimuli/practice/PT_03.jpg'},
      {'practiceStim': 'stimuli/practice/PT_04.jpg'},
      {'practiceStim': 'stimuli/practice/PT_05.jpg'},
      {'practiceStim': 'stimuli/practice/PT_06.jpg'},
      {'practiceStim': 'stimuli/practice/PT_07.jpg'},
      {'practiceStim': 'stimuli/practice/PT_08.jpg'},
      {'practiceStim': 'stimuli/practice/PT_09.jpg'},
      {'practiceStim': 'stimuli/practice/PT_10.jpg'},
      {'practiceStim': 'stimuli/practice/PT_11.jpg'},
      {'practiceStim': 'stimuli/practice/PT_12.jpg'},
      {'practiceStim': 'stimuli/practice/PT_13.jpg'},
      {'practiceStim': 'stimuli/practice/PT_14.jpg'}]
    Routine isi
    Routine practice_trial
  LoopTerminator practice_loop
  Routine main_message
  LoopInitiator identity_loop loopType="TrialHandler"
    conditionsFile = conditions/identity.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'race': 'W', 'gender': 'M', 'identity': 11.0, 'emotion': 'S', 'folder': 'stimuli/WM11/'},
      {'race': 'W', 'gender': 'M', 'identity': 7.0, 'emotion': 'H', 'folder': 'stimuli/WM07/'},
      {'race': 'W', 'gender': 'M', 'identity': 6.0, 'emotion': 'F', 'folder': 'stimuli/WM06/'},
      {'race': 'W', 'gender': 'F', 'identity': 13.0, 'emotion': 'D', 'folder': 'stimuli/WF13/'},
      {'race': 'W', 'gender': 'F', 'identity': 10.0, 'emotion': 'Su', 'folder': 'stimuli/WF10/'},
      {'race': 'W', 'gender': 'F', 'identity': 4.0, 'emotion': 'A', 'folder': 'stimuli/WF04/'},
      {'race': 'H', 'gender': 'M', 'identity': 9.0, 'emotion': 'Su', 'folder': 'stimuli/HM09/'},
      {'race': 'H', 'gender': 'M', 'identity': 6.0, 'emotion': 'D', 'folder': 'stimuli/HM06/'},
      {'race': 'H', 'gender': 'M', 'identity': 2.0, 'emotion': 'A', 'folder': 'stimuli/HM02/'},
      {'race': 'H', 'gender': 'F', 'identity': 9.0, 'emotion': 'F', 'folder': 'stimuli/HF09/'},
      {'race': 'H', 'gender': 'F', 'identity': 7.0, 'emotion': 'S', 'folder': 'stimuli/HF07/'},
      {'race': 'H', 'gender': 'F', 'identity': 5.0, 'emotion': 'H', 'folder': 'stimuli/HF05/'},
      {'race': 'B', 'gender': 'M', 'identity': 16.0, 'emotion': 'A', 'folder': 'stimuli/BM16/'},
      {'race': 'B', 'gender': 'M', 'identity': 14.0, 'emotion': 'Su', 'folder': 'stimuli/BM14/'},
      {'race': 'B', 'gender': 'M', 'identity': 4.0, 'emotion': 'H', 'folder': 'stimuli/BM04/'},
      {'race': 'B', 'gender': 'F', 'identity': 14.0, 'emotion': 'F', 'folder': 'stimuli/BF14/'}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
    Routine fixation
    LoopInitiator morph_loop loopType="TrialHandler"
      conditionsFile = conditions/morph.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'morph_step': 1, 'first_step': 1, 'append': '_00'},
        {'morph_step': 2, 'first_step': 0, 'append': '_01'},
        {'morph_step': 3, 'first_step': 0, 'append': '_02'},
        {'morph_step': 4, 'first_step': 0, 'append': '_03'},
        {'morph_step': 5, 'first_step': 0, 'append': '_04'},
        {'morph_step': 6, 'first_step': 0, 'append': '_05'},
        {'morph_step': 7, 'first_step': 0, 'append': '_06'},
        {'morph_step': 8, 'first_step': 0, 'append': '_07'},
        {'morph_step': 9, 'first_step': 0, 'append': '_08'},
        {'morph_step': 10, 'first_step': 0, 'append': '_09'},
        {'morph_step': 11, 'first_step': 0, 'append': '_10'},
        {'morph_step': 12, 'first_step': 0, 'append': '_11'},
        {'morph_step': 13, 'first_step': 0, 'append': '_12'},
        {'morph_step': 14, 'first_step': 0, 'append': '_13'},
        {'morph_step': 15, 'first_step': 0, 'append': '_14'}]
      Routine is_first_step
      LoopInitiator first_step_loop loopType="TrialHandler"
        loopType = sequential
        nReps = firstStepRep
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        Routine isi
        Routine first_morph_step
        Routine add_data
      LoopTerminator first_step_loop
      Routine isnt_first_step
      LoopInitiator remaining_steps_loop loopType="TrialHandler"
        loopType = sequential
        nReps = remainingStepsRep
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        Routine isi
        Routine rating
        Routine add_data
      LoopTerminator remaining_steps_loop
    LoopTerminator morph_loop
  LoopTerminator identity_loop
  Routine end
